PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Screen = 1
  Show info dlg = False
  Units = height
  Use version = latest
  Window size (pixels) = [1440, 900]
  color = $[1.0,1.0,1.0]
  expName = slow
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Routines
  Routine SlowInstr
    TextComponent SlowInstrText
      color = $[-1.0000, -1.0000, -1.0000]
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text [set every repeat] = $SlowInstructions
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    KeyboardComponent SlowInstrKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 30
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  Routine FastInstr
    TextComponent Instr1
      color = $[-1.0000, -1.0000, -1.0000]
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text [set every repeat] = $FastInstructions
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    KeyboardComponent InstrResponse
      allowedKeys = 'e'
      forceEndRoutine = True
      startVal [time (s)] = 2
      stopVal [duration (s)] = 28
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  Routine FastTrial
    PolygonComponent fixcross
      fillColor = $[-1.0000, -1.0000, -1.0000]
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent Fasttext
      color = $[-1.0000, -1.0000, -1.0000]
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 5.5
      text [set every repeat] = $Statement
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    KeyboardComponent key_resp
      allowedKeys = 'e','i'
      correctAns = $Correct
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5.5
      storeCorrect = True
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    SoundComponent Timer
      sound = A
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 0.2
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  Routine SlowTrial
    PolygonComponent polygon
      fillColor = $[-1.0000, -1.0000, -1.0000]
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent SlowText
      color = $[-1.0000, -1.0000, -1.0000]
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 10
      text [set every repeat] = $Statement
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    KeyboardComponent SlowKey
      allowedKeys = 'f','j'
      correctAns = $Correct
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        myCount = 0
      Begin Routine:
        myCount = myCount + 1
        if myCount > 80:
            SlowLoop.finished = True
    TextComponent ftrue
      color = $[-1.0000, -1.0000, -1.0000]
      letterHeight = 0.06
      pos = (-.5, .3)
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 10
      text = TRUE
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    TextComponent jfalse
      color = $[-1.0000, -1.0000, -1.0000]
      letterHeight = 0.06
      pos = (.5, .3)
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 10
      text = FALSE
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    SoundComponent SlowTone
      sound = A
      startVal [time (s)] = 7
      stopVal [duration (s)] = .2
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  Routine BlockSelect
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        nRepsblock1=0
        nRepsblock2=0
      Begin Routine:
        if selectBlock==1:
         nRepsblock1=1
         nRepsblock2=0
        elif selectBlock==2:
         nRepsblock1=0
         nRepsblock2=1
  Routine EndStudy
    TextComponent EndStudyText
      color = $[-1.0000, -1.0000, -1.0000]
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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      text:
        Thank you for completing this study!

        Please remember the following completion code to enter into TurkPrime (you may want to write it down):

        DOG123

        DO NOT EXIT PAGE UNTIL YOU SEE MESSAGE:
        “Thank you for your patience”
        Once this message appears, press okay and return to TurkPrime
        Press SPACE to complete study
    KeyboardComponent endstudykey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3
      stopVal [time (s)] = 30
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  Routine Mouse
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        win.mouseVisible = True
      End Routine:
        win.mouseVisible = False
  Routine PracticeEnd
    TextComponent PracticeEndText
      color = $[-1.0000, -1.0000, -1.0000]
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You have finished the trial period. You will now complete the official task. Please take your time and judge the following statements to the best of your ability.

        Press ‘F’ if the statement is true and ‘J’ if the statement is false.

        Press SPACE to continue
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine Advance
    TextComponent text
      color = $[-1.0000, -1.0000, -1.0000]
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Press Space to Continue
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine Encouragement
    TextComponent encouragetext
      color = $[-1.0000, -1.0000, -1.0000]
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Woah-oh! You’re Halfway There!
        Keep It Up!

        Press Space to Continue
    KeyboardComponent encouragekey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3
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    CodeComponent code_4
      Code Type = Auto->JS
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      Each Frame:
        if SlowLoop.thisN != 40:
            continueRoutine = False
  Routine slowprac
    PolygonComponent fixcross1
      fillColor = $[-1.0000, -1.0000, -1.0000]
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent PracticeText_2
      color = $[-1.0000, -1.0000, -1.0000]
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 10
      text [set every repeat] = $practicetext
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    KeyboardComponent key_resp_5
      allowedKeys = 'f','j'
      correctAns = $practicecorrect
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 10
      storeCorrect = True
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    TextComponent FTrue
      color = $[-1.0000, -1.0000, -1.0000]
      letterHeight = 0.06
      pos = (-.5, .3)
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 10
      text = TRUE
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    TextComponent JFALSE
      color = $[-1.0000, -1.0000, -1.0000]
      letterHeight = 0.06
      pos = (.5,.3)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 10
      text = FALSE
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    SoundComponent SlowTonePrac
      sound = A
      startVal [time (s)] = 7
      stopVal [duration (s)] = 0.2
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  Routine test
    TextComponent text_3
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Testing if experiment is uploading
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Mouse
  LoopInitiator SlowInstrLoop loopType="TrialHandler"
    conditionsFile = SlowInstructionsSheet2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'SlowInstructions': 'You will be shown a total of 160 statements pertaining to mathematics, science, and social concepts. Your task is to determine whether each statement is true or false as quickly as possible without sacrificing accuracy. Some statements will be difficult and some will be easier.  We do not expect you to know the correct answer for all 160 statements.  Press E to Continue'},
      {'SlowInstructions': 'We urge you to try your best and take your time. Each statement will appear on your screen and you will have as much time as you need to decide if it is true or false. Press E to continue'},
      {'SlowInstructions': 'If the statement is true, you will press the “E” key on your keyboard with your left pointer finger; if the statement is false, you will press the “I” key on your keyboard with your right pointer finger. Press E to continue'}]
    Routine SlowInstr
  LoopTerminator SlowInstrLoop
  LoopInitiator slowpracticeloop loopType="TrialHandler"
    conditionsFile = InfinityThesisPracticeStimuli.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'practicetext': 'A circle is a shape', 'practicecorrect': 'f'},
      {'practicetext': 'Dinosaurs are extinct', 'practicecorrect': 'f'},
      {'practicetext': 'Magenta is a color', 'practicecorrect': 'f'},
      {'practicetext': 'A clock is used to tell time', 'practicecorrect': 'f'},
      {'practicetext': 'Humans cannot breathe water', 'practicecorrect': 'f'},
      {'practicetext': 'A truck is an animal', 'practicecorrect': 'j'},
      {'practicetext': 'Jupiter is the planet we live on', 'practicecorrect': 'j'},
      {'practicetext': 'The Earth is a star', 'practicecorrect': 'j'},
      {'practicetext': 'Mississippi is a country', 'practicecorrect': 'j'},
      {'practicetext': 'Humans cannot eat food', 'practicecorrect': 'j'}]
    Routine slowprac
    Routine Advance
  LoopTerminator slowpracticeloop
  Routine PracticeEnd
  LoopInitiator SlowLoop loopType="TrialHandler"
    conditionsFile = InfinityThesisStimuli.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Statement': 'A minute is finite', 'Correct': 'e'},
      {'Statement': 'A minute is infinite', 'Correct': 'i'},
      {'Statement': 'A minute has an end', 'Correct': 'e'},
      {'Statement': 'A minute is endless', 'Correct': 'i'},
      {'Statement': 'A minute cannot go on forever', 'Correct': 'e'},
      {'Statement': 'A minute can go on forever', 'Correct': 'i'},
      {'Statement': 'A minute cannot be further divided', 'Correct': 'i'},
      {'Statement': 'A minute can be further divided', 'Correct': 'e'},
      {'Statement': 'An inch is finite', 'Correct': 'e'},
      {'Statement': 'An inch is infinite', 'Correct': 'i'},
      {'Statement': 'An inch has an end', 'Correct': 'e'},
      {'Statement': 'An inch is endless', 'Correct': 'i'},
      {'Statement': 'An inch cannot go on forever', 'Correct': 'e'},
      {'Statement': 'An inch can go on forever', 'Correct': 'i'},
      {'Statement': 'An inch cannot be further divided', 'Correct': 'i'},
      {'Statement': 'An inch can be further divided', 'Correct': 'e'},
      {'Statement': 'Intervals of time are finite', 'Correct': 'e'},
      {'Statement': 'Intervals of time are infinite', 'Correct': 'i'},
      {'Statement': 'Intervals of time have an end', 'Correct': 'e'},
      {'Statement': 'Intervals of time are endless', 'Correct': 'i'},
      {'Statement': 'Intervals of time cannot go on forever', 'Correct': 'e'},
      {'Statement': 'Intervals of time can go on forever', 'Correct': 'i'},
      {'Statement': 'Intervals of time cannot be further divided', 'Correct': 'i'},
      {'Statement': 'Intervals of time can be further divided', 'Correct': 'e'}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
    Routine SlowTrial
    Routine Encouragement
    Routine Advance
  LoopTerminator SlowLoop
  Routine EndStudy
