PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = $[1.0,1.0,1.0]
  expName = InfinityThesisTest5
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Routines
  Routine SlowInstr
    TextComponent SlowInstrText
      color = $[-1.0000, -1.0000, -1.0000]
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text [set every repeat] = $SlowInstructions
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    KeyboardComponent SlowInstrKey
      allowedKeys = 'e'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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  Routine FastInstr
    TextComponent Instr1
      color = $[-1.0000, -1.0000, -1.0000]
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text [set every repeat] = $FastInstructions
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    KeyboardComponent InstrResponse
      allowedKeys = 'e'
      forceEndRoutine = True
      startVal [time (s)] = 2
      stopVal [duration (s)] = 28
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  Routine FastTrial
    PolygonComponent fixcross
      fillColor = $[-1.0000, -1.0000, -1.0000]
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent Fasttext
      color = $[-1.0000, -1.0000, -1.0000]
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 5.5
      text [set every repeat] = $Statement
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    KeyboardComponent key_resp
      allowedKeys = 'e','i'
      correctAns = $Correct
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5.5
      storeCorrect = True
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    SoundComponent Timer
      sound = A
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 0.2
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  Routine SlowTrial
    PolygonComponent polygon
      fillColor = $[-1.0000, -1.0000, -1.0000]
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent SlowText
      color = $[-1.0000, -1.0000, -1.0000]
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      text [set every repeat] = $Statement
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    KeyboardComponent SlowKey
      allowedKeys = 'e','i'
      correctAns = $Correct
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine BlockSelect
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        nRepsblock1=0
        nRepsblock2=0
      Begin Routine:
        if selectBlock==1:
         nRepsblock1=1
         nRepsblock2=0
        elif selectBlock==2:
         nRepsblock1=0
         nRepsblock2=1
  Routine EndStudy
    TextComponent EndStudyText
      color = $[-1.0000, -1.0000, -1.0000]
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text = Thank you for completing this study
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    KeyboardComponent endstudykey
      allowedKeys = 'e'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator Blockselectloop loopType="TrialHandler"
    conditionsFile = BlockSelectLoop.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [{'selectBlock': 1},
      {'selectBlock': 2},
      {'selectBlock': 1},
      {'selectBlock': 2},
      {'selectBlock': 1},
      {'selectBlock': 2},
      {'selectBlock': 1},
      {'selectBlock': 2},
      {'selectBlock': 1},
      {'selectBlock': 2},
      {'selectBlock': 1},
      {'selectBlock': 2},
      {'selectBlock': 1},
      {'selectBlock': 2},
      {'selectBlock': 1},
      {'selectBlock': 2},
      {'selectBlock': 1},
      {'selectBlock': 2},
      {'selectBlock': 1},
      {'selectBlock': 2}]
    Routine BlockSelect
    LoopInitiator SpeededBlock loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = nRepsblock1
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      LoopInitiator Instrloop loopType="TrialHandler"
        conditionsFile = SpeededInstructionsSheet.xlsx
        loopType = sequential
        nReps = 1
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        conditions:
          [{'FastInstructions': 'You will be shown a total of 160 statements pertaining to mathematics, science, and social concepts. Your task is to determine whether each statement is true or false as quickly as possible without sacrificing accuracy. Some statements will be difficult and some will be easier.  We do not expect you to know the correct answer for all 160 statements.  Press E to Continue'},
          {'FastInstructions': 'Each statement will appear on your screen for 5 seconds and you will have those 5 seconds to decide if it is true or false before the next statement appears. There will be a timer on your screen and a reminder when you have 2 seconds remaining. If you do not respond, that answer will be considered incorrect and the task will move on to the next statement. Press E to continue'},
          {'FastInstructions': 'If the statement is true, you will press the “E” key on your keyboard with your left pointer finger; if the statement is false, you will press the “I” key on your keyboard with your right pointer finger. Press E to continue'}]
        Routine FastInstr
      LoopTerminator Instrloop
      LoopInitiator FastLoop loopType="TrialHandler"
        conditionsFile = InfinityThesisTest5.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'Statement': 'A minute is infinite', 'Correct': 'i'},
          {'Statement': 'Space has an end', 'Correct': 'i'},
          {'Statement': 'Time  goes on forever', 'Correct': 'e'},
          {'Statement': 'Numbers are finite', 'Correct': 'i'},
          {'Statement': 'An inch cannot go on forever', 'Correct': 'e'}]
        Routine FastTrial
      LoopTerminator FastLoop
    LoopTerminator SpeededBlock
    LoopInitiator SlowBlock loopType="TrialHandler"
      loopType = sequential
      nReps = nRepsblock2
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      LoopInitiator SlowInstrLoop loopType="TrialHandler"
        conditionsFile = /Users/sophiecb/Desktop/SlowInstructionsSheet.xlsx
        loopType = sequential
        nReps = 1
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        conditions:
          [{'SlowInstructions': 'You will be shown a total of 160 statements pertaining to mathematics, science, and social concepts. Your task is to determine whether each statement is true or false as quickly as possible without sacrificing accuracy. Some statements will be difficult and some will be easier.  We do not expect you to know the correct answer for all 160 statements.  Press E to Continue'},
          {'SlowInstructions': 'We urge you to try your best and take your time. Each statement will appear on your screen and you will have as much time as you need to decide if it is true or false. Press E to continue'},
          {'SlowInstructions': 'If the statement is true, you will press the “E” key on your keyboard with your left pointer finger; if the statement is false, you will press the “I” key on your keyboard with your right pointer finger. Press E to continue'}]
        Routine SlowInstr
      LoopTerminator SlowInstrLoop
      LoopInitiator SlowLoop loopType="TrialHandler"
        conditionsFile = InfinityThesisTest5.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'Statement': 'A minute is infinite', 'Correct': 'i'},
          {'Statement': 'Space has an end', 'Correct': 'i'},
          {'Statement': 'Time  goes on forever', 'Correct': 'e'},
          {'Statement': 'Numbers are finite', 'Correct': 'i'},
          {'Statement': 'An inch cannot go on forever', 'Correct': 'e'}]
        Routine SlowTrial
      LoopTerminator SlowLoop
    LoopTerminator SlowBlock
  LoopTerminator Blockselectloop
  Routine EndStudy
