PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = $[1.0,1.0,1.0]
  expName = InfinityThesisTest5
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Routines
  Routine SlowInstr
    TextComponent SlowInstrText
      color = $[-1.0000, -1.0000, -1.0000]
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text [set every repeat] = $SlowInstructions
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    KeyboardComponent SlowInstrKey
      allowedKeys = 'f'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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  Routine FastInstr
    TextComponent Instr1
      color = $[-1.0000, -1.0000, -1.0000]
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text [set every repeat] = $FastInstructions
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    KeyboardComponent InstrResponse
      allowedKeys = 'e'
      forceEndRoutine = True
      startVal [time (s)] = 2
      stopVal [duration (s)] = 28
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  Routine FastTrial
    PolygonComponent fixcross
      fillColor = $[-1.0000, -1.0000, -1.0000]
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent Fasttext
      color = $[-1.0000, -1.0000, -1.0000]
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 5.5
      text [set every repeat] = $Statement
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    KeyboardComponent key_resp
      allowedKeys = 'e','i'
      correctAns = $Correct
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5.5
      storeCorrect = True
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    SoundComponent Timer
      sound = A
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 0.2
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  Routine SlowTrial
    PolygonComponent polygon
      fillColor = $[-1.0000, -1.0000, -1.0000]
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.4
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    TextComponent SlowText
      color = $[-1.0000, -1.0000, -1.0000]
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      text [set every repeat] = $Statement
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    KeyboardComponent SlowKey
      allowedKeys = 'e','i'
      correctAns = $Correct
      forceEndRoutine = True
      startVal [time (s)] = 2.0
      storeCorrect = True
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  Routine BlockSelect
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        nRepsblock1=0
        nRepsblock2=0
      Begin Routine:
        if selectBlock==1:
         nRepsblock1=1
         nRepsblock2=0
        elif selectBlock==2:
         nRepsblock1=0
         nRepsblock2=1
  Routine EndStudy
    TextComponent EndStudyText
      color = $[-1.0000, -1.0000, -1.0000]
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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      text:
        Thank you for completing this study. Please press esc, return to qualtrics, and input the following unique code in the Qualtrics survey:

        creativesticker42
    KeyboardComponent endstudykey
      allowedKeys = 'e'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Mouse
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        win.mouseVisible = True
      End Routine:
        win.mouseVisible = False
  Routine SlowPractice
    PolygonComponent FixcrossPractice
      fillColor = $[-1.0000, -1.0000, -1.0000]
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.45
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    TextComponent PracticeText
      color = $[-1.0000, -1.0000, -1.0000]
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      text [set every repeat] = $practicetext
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    KeyboardComponent key_resp_2
      allowedKeys = 'e','i'
      correctAns = $practicecorrect
      forceEndRoutine = True
      startVal [time (s)] = 2.0
      storeCorrect = True
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  Routine PracticeEnd
    TextComponent PracticeEndText
      color = $[-1.0000, -1.0000, -1.0000]
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You have finished the trial period. You will now complete the official task. Judge the following statements as quickly as you can without sacrificing accuracy.

        Press ‘E’ if the statement is true and ‘I’ if the statement is false.

        Press E to continue
    KeyboardComponent key_resp_3
      allowedKeys = 'e'
      forceEndRoutine = True
      startVal [time (s)] = 3.0
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  Routine Advance
    TextComponent ContinueText
      color = $[-1.0000, -1.0000, -1.0000]
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Press Space to Continue
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    KeyboardComponent ContinueKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine Encouragement
    CodeComponent code_3
      Code Type = Auto->JS
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      Each Frame:
        if slowpracticeloop.thisN != 5:
            continueRoutine = False
    TextComponent Encourage
      color = $[-1.0000, -1.0000, -1.0000]
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        You’re Halfway There!
        Keep It Up!
        Press Space to Continue
    KeyboardComponent EncourageKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  Routine Mouse
  LoopInitiator SlowInstrLoop loopType="TrialHandler"
    conditionsFile = SlowInstructionsSheet2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'SlowInstructions': 'You will be shown a total of 160 statements pertaining to mathematics, science, and social concepts. Your task is to determine whether each statement is true or false as quickly as possible without sacrificing accuracy. Some statements will be difficult and some will be easier.  We do not expect you to know the correct answer for all 160 statements.  Press E to Continue'},
      {'SlowInstructions': 'We urge you to try your best and take your time. Each statement will appear on your screen and you will have as much time as you need to decide if it is true or false. Press E to continue'},
      {'SlowInstructions': 'If the statement is true, you will press the “E” key on your keyboard with your left pointer finger; if the statement is false, you will press the “I” key on your keyboard with your right pointer finger. Press E to continue'}]
    Routine SlowInstr
  LoopTerminator SlowInstrLoop
  LoopInitiator slowpracticeloop loopType="TrialHandler"
    conditionsFile = InfinityThesisPracticeStimuli.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'practicetext': 'A circle is a shape', 'practicecorrect': 'e'},
      {'practicetext': 'Dinosaurs are extinct', 'practicecorrect': 'e'},
      {'practicetext': 'Magenta is a color', 'practicecorrect': 'e'},
      {'practicetext': 'A clock is used to tell time', 'practicecorrect': 'e'},
      {'practicetext': 'Humans cannot breathe water', 'practicecorrect': 'e'},
      {'practicetext': 'A truck is an animal', 'practicecorrect': 'i'},
      {'practicetext': 'Jupiter is the planet we live on', 'practicecorrect': 'i'},
      {'practicetext': 'The Earth is a star', 'practicecorrect': 'i'},
      {'practicetext': 'Mississippi is a country', 'practicecorrect': 'i'},
      {'practicetext': 'Humans cannot eat food', 'practicecorrect': 'i'}]
    Routine SlowPractice
    Routine Encouragement
    Routine Advance
  LoopTerminator slowpracticeloop
  Routine PracticeEnd
  LoopInitiator SlowLoop loopType="TrialHandler"
    conditionsFile = InfinityThesisStimuli.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Statement': 'A minute is finite', 'Correct': 'e'},
      {'Statement': 'A minute is infinite', 'Correct': 'i'},
      {'Statement': 'A minute has an end', 'Correct': 'e'},
      {'Statement': 'A minute is endless', 'Correct': 'i'},
      {'Statement': 'A minute cannot go on forever', 'Correct': 'e'},
      {'Statement': 'A minute can go on forever', 'Correct': 'i'},
      {'Statement': 'A minute cannot be further divided', 'Correct': 'i'},
      {'Statement': 'A minute can be further divided', 'Correct': 'e'},
      {'Statement': 'An inch is finite', 'Correct': 'e'},
      {'Statement': 'An inch is infinite', 'Correct': 'i'},
      {'Statement': 'An inch has an end', 'Correct': 'e'},
      {'Statement': 'An inch is endless', 'Correct': 'i'},
      {'Statement': 'An inch cannot go on forever', 'Correct': 'e'},
      {'Statement': 'An inch can go on forever', 'Correct': 'i'},
      {'Statement': 'An inch cannot be further divided', 'Correct': 'i'},
      {'Statement': 'An inch can be further divided', 'Correct': 'e'},
      {'Statement': 'Intervals of time are finite', 'Correct': 'e'},
      {'Statement': 'Intervals of time are infinite', 'Correct': 'i'},
      {'Statement': 'Intervals of time have an end', 'Correct': 'e'},
      {'Statement': 'Intervals of time are endless', 'Correct': 'i'},
      {'Statement': 'Intervals of time cannot go on forever', 'Correct': 'e'},
      {'Statement': 'Intervals of time can go on forever', 'Correct': 'i'},
      {'Statement': 'Intervals of time cannot be further divided', 'Correct': 'i'},
      {'Statement': 'Intervals of time can be further divided', 'Correct': 'e'}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
    Routine SlowTrial
    Routine Advance
  LoopTerminator SlowLoop
  Routine EndStudy
