PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = $[1.0000, 1.0000, 1.0000]
  expName = Slow
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Routines
  Routine sinstr
    TextComponent SlowInstrText
      color = $[-1.0000, -1.0000, -1.0000]
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text [set every repeat] = $SlowInstructions
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    KeyboardComponent SlowInstrKey
      allowedKeys = 'f'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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  Routine spract
    PolygonComponent fixcross1
      fillColor = $[-1.0000, -1.0000, -1.0000]
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent PracticeText
      color = $[-1.0000, -1.0000, -1.0000]
      letterHeight = 0.05
      startVal [time (s)] = 1
      text [set every repeat] = $practicetext
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    KeyboardComponent key_resp_2
      allowedKeys = 'f','j'
      correctAns = $practicecorrect
      forceEndRoutine = True
      startVal [time (s)] = 1
      storeCorrect = True
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    TextComponent FTrue
      color = $[-1.0000, -1.0000, -1.0000]
      letterHeight = 0.06
      pos = (-.5, .3)
      saveStartStop = False
      startVal [time (s)] = 0.05
      text = F=TRUE
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    TextComponent JFALSE
      color = $[-1.0000, -1.0000, -1.0000]
      letterHeight = 0.06
      pos = (.5,.3)
      startVal [time (s)] = 0.05
      text = J=FALSE
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Flow
  LoopInitiator sinstloop loopType="TrialHandler"
    conditionsFile = SlowInstructionsSheet2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'SlowInstructions': 'You will be shown a total of 80 statements pertaining to mathematics, science, and social concepts. Your task is to determine whether each statement is true or false. Some statements will be difficult and some will be easier.  We do not expect you to know the correct answer for all 80 statements.  Press F to Continue'},
      {'SlowInstructions': 'We urge you to try your best and take your time. Each statement will appear on your screen and you will have as much time as you need to decide if it is true or false. Press F to continue'},
      {'SlowInstructions': 'If the statement is true, you will press the “F” key on your keyboard with your left pointer finger; if the statement is false, you will press the “J” key on your keyboard with your right pointer finger. Press F to continue'},
      {'SlowInstructions': "Prior to completing the study, you will complete 10 practice trials to familiarize yourself with the task. Your performance on these trials will determine your participation in the following study. Press 'F' to continue."},
      {'SlowInstructions': 'If the statement is true, press the “F” key on your keyboard with your left pointer finger; if the statement is false, press the “J” key on your keyboard with your right pointer finger. Press F to continue'}]
    Routine sinstr
  LoopTerminator sinstloop
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = InfinityThesisPracticeStimuli.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'practicetext': 'A circle is a shape', 'practicecorrect': 'f'},
      {'practicetext': 'Dinosaurs are extinct', 'practicecorrect': 'f'},
      {'practicetext': 'Magenta is a color', 'practicecorrect': 'f'},
      {'practicetext': 'A clock is used to tell time', 'practicecorrect': 'f'},
      {'practicetext': 'Humans cannot breathe water', 'practicecorrect': 'f'},
      {'practicetext': 'A truck is an animal', 'practicecorrect': 'j'},
      {'practicetext': 'Jupiter is the planet we live on', 'practicecorrect': 'j'},
      {'practicetext': 'The Earth is a star', 'practicecorrect': 'j'},
      {'practicetext': 'Mississippi is a country', 'practicecorrect': 'j'},
      {'practicetext': 'Humans cannot eat food', 'practicecorrect': 'j'}]
    Routine spract
  LoopTerminator trials
