PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = scinfinityslow
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Routines
  Routine trial
  Routine SlowInst
    TextComponent Instr1
      color = $[-1.0000, -1.0000, -1.0000]
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text [set every repeat] = $SlowInstructions
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    KeyboardComponent InstrResponse
      allowedKeys = 'f'
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 30
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Flow
  LoopInitiator Instloop loopType="TrialHandler"
    conditionsFile = /Users/sophiecb/Desktop/Thesis/ThesisTestSlow/SlowInstructionsSheet2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'SlowInstructions': 'You will be shown a total of 80 statements pertaining to mathematics, science, and social concepts. Your task is to determine whether each statement is true or false. Some statements will be difficult and some will be easier.  We do not expect you to know the correct answer for all 80 statements.  Press F to Continue'},
      {'SlowInstructions': 'We urge you to try your best and take your time. Each statement will appear on your screen and you will have as much time as you need to decide if it is true or false. Press F to continue'},
      {'SlowInstructions': 'If the statement is true, you will press the “F” key on your keyboard with your left pointer finger; if the statement is false, you will press the “J” key on your keyboard with your right pointer finger. Press F to continue'},
      {'SlowInstructions': "Prior to completing the study, you will complete 10 practice trials to familiarize yourself with the task. Your performance on these trials will determine your participation in the following study. Press 'F' to continue."},
      {'SlowInstructions': 'If the statement is true, press the “F” key on your keyboard with your left pointer finger; if the statement is false, press the “J” key on your keyboard with your right pointer finger. Press F to continue'}]
    Routine SlowInst
  LoopTerminator Instloop
